<CompuCell3D Revision="0" Version="4.3.2">
   
   <Metadata>
      
      <!-- Basic properties simulation -->
      <NumberOfProcessors>1</NumberOfProcessors>
      <DebugOutputFrequency>10</DebugOutputFrequency>
      <!-- <NonParallelModule Name="Potts"/> -->
   </Metadata>
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="200" y="200" z="1"/>
      <Steps>100000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>3</NeighborOrder>
      <Boundary_x>Periodic</Boundary_x>
      <Boundary_y>Periodic</Boundary_y>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="Cell"/>
   </Plugin>
   
   <Plugin Name="Volume"/>
   
   <Plugin Name="Surface"/>
   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
   <Plugin Name="Contact">
      <!-- Specification of adhesion energies -->
      <Energy Type1="Medium" Type2="Medium">10.0</Energy>
      <Energy Type1="Medium" Type2="Cell">10.0</Energy>
      <Energy Type1="Cell" Type2="Cell">10.0</Energy>
      <NeighborOrder>4</NeighborOrder>
   </Plugin>
   
</CompuCell3D>
